CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:heterogeneity
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:heterogeneity
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:OrigGray
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectNeighbors:[module_num:8|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
    Select objects to measure:IdentifyPrimaryObjects
    Select neighboring objects to measure:IdentifyPrimaryObjects
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Desktop\\celltest
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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